PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = final_final_task
  keyboardBackend = ioHub
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Routines
  Routine instructions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 60
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      text:
        Welcome to auditory task!!

        Press 'Y' to read the task instructions.
    KeyboardComponent key_resp_2
      allowedKeys = 'y'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 60
      store = all keys
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  Routine trial_text
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    TextComponent text_14
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 60
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      text:
        HOW TO REPORT:

        This is a continuous reporting task. Your job is to press a key whenever you see a 'GREEN BOX' appear on the screen. The box will last for 2 seconds. Pay attention to which ear you feel like you heard the sound coming from.

        Remember to press:

        'Left arrow key' for 'Left ear'
        'Right arrow key' for 'Right ear'
        'Spacebar' for 'Cannot predict'

        Press 'Y' to continue.
    KeyboardComponent key_resp_18
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 60
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  Routine catch1
    RoutineSettingsComponent catch1
      stopVal [duration (s)] = 30
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    SoundComponent sound_14
      saveStartStop = False
      sound = C:/Users/fatma/OneDrive/Desktop/IITK BOOKS/Decision Making/DM Project/Stimulus/task_sound_stimulus/catch_trail.ogg.opus
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    KeyboardComponent key_resp_20
      allowedKeys [set every repeat] = 'left','right','space'
      discard previous = False
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 30
      store = all keys
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    PolygonComponent ct1_2
      fillColor = 0.2706, 1.0000, -0.5451
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 2
      stopVal [time (s)] = 4
      units = pix
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    PolygonComponent ct2_2
      fillColor = 0.2706, 1.0000, -0.5451
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 8
      stopVal [time (s)] = 10
      units = pix
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    PolygonComponent ct3_2
      fillColor = 0.2706, 1.0000, -0.5451
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 14
      stopVal [time (s)] = 16
      units = pix
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    PolygonComponent ct4_2
      fillColor = 0.2706, 1.0000, -0.5451
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 20
      stopVal [time (s)] = 22
      units = pix
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    PolygonComponent ct5_2
      fillColor = 0.2706, 1.0000, -0.5451
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 26
      stopVal [time (s)] = 28
      units = pix
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  Routine c1
    RoutineSettingsComponent c1
      stopVal [duration (s)] = 15
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    SliderComponent slider_1
      forceEndRoutine = False
      granularity = 1
      labels = 1, 2, 3, 4, 5, 6, 7, 8, 9, 10
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 15
      styles = slider
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    TextComponent text_4
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 15
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      text:
        Report how confident you were about your responses throughtout the trial by clicking on the white line on the slider.

        Where '1' is for 'least confident' and '10' is for 'most confident'.
  Routine trial1
    RoutineSettingsComponent trial1
      stopVal [duration (s)] = 120
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    SoundComponent sound_18
      sound = C:/Users/fatma/OneDrive/Desktop/IITK BOOKS/Decision Making/DM Project/Stimulus/task_sound_stimulus/t1.ogg.opus
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_43
      allowedKeys [set every repeat] = 'left','right','space'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 120
      store = all keys
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    PolygonComponent target_11
      fillColor = 0.2706, 1.0000, -0.5451
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 2
      stopVal [time (s)] = 4
      units = pix
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    PolygonComponent target2_11
      fillColor = 0.2706, 1.0000, -0.5451
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 8
      stopVal [time (s)] = 10
      units = pix
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    PolygonComponent target3_11
      fillColor = 0.2706, 1.0000, -0.5451
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 14
      stopVal [time (s)] = 16
      units = pix
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    PolygonComponent target4_11
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 20
      stopVal [time (s)] = 22
      units = pix
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    PolygonComponent target5_11
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 26
      stopVal [time (s)] = 28
      units = pix
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    PolygonComponent target6_11
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 32
      stopVal [time (s)] = 34
      units = pix
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    PolygonComponent target7_11
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 38
      stopVal [time (s)] = 40
      units = pix
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    PolygonComponent target8_11
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 44
      stopVal [time (s)] = 46
      units = pix
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    PolygonComponent target9_11
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 50
      stopVal [time (s)] = 52
      units = pix
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    PolygonComponent target10_11
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 56
      stopVal [time (s)] = 58
      units = pix
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    PolygonComponent target11_11
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 62
      stopVal [time (s)] = 64
      units = pix
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    PolygonComponent target12_11
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 68
      stopVal [time (s)] = 70
      units = pix
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    PolygonComponent target13_11
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 74
      stopVal [time (s)] = 76
      units = pix
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    PolygonComponent target14_11
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 80
      stopVal [time (s)] = 82
      units = pix
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    PolygonComponent target15_11
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 86
      stopVal [time (s)] = 88
      units = pix
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
  Routine trial2
    RoutineSettingsComponent trial2
      stopVal [duration (s)] = 120
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    SoundComponent sound_19
      sound = C:/Users/fatma/OneDrive/Desktop/IITK BOOKS/Decision Making/DM Project/Stimulus/task_sound_stimulus/t2.ogg.opus
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'left','right','space'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 120
      store = all keys
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    PolygonComponent target
      fillColor = 0.2706, 1.0000, -0.5451
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 2
      stopVal [time (s)] = 4
      units = pix
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    PolygonComponent target2
      fillColor = 0.2706, 1.0000, -0.5451
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 8
      stopVal [time (s)] = 10
      units = pix
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    PolygonComponent target3
      fillColor = 0.2706, 1.0000, -0.5451
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 14
      stopVal [time (s)] = 16
      units = pix
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    PolygonComponent target4
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 20
      stopVal [time (s)] = 22
      units = pix
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    PolygonComponent target5
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 26
      stopVal [time (s)] = 28
      units = pix
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    PolygonComponent target6
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 32
      stopVal [time (s)] = 34
      units = pix
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    PolygonComponent target7
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 38
      stopVal [time (s)] = 40
      units = pix
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    PolygonComponent target8
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 44
      stopVal [time (s)] = 46
      units = pix
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    PolygonComponent target9
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 50
      stopVal [time (s)] = 52
      units = pix
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    PolygonComponent target10
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 56
      stopVal [time (s)] = 58
      units = pix
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    PolygonComponent target11
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 62
      stopVal [time (s)] = 64
      units = pix
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    PolygonComponent target12
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 68
      stopVal [time (s)] = 70
      units = pix
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    PolygonComponent target13
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 74
      stopVal [time (s)] = 76
      units = pix
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    PolygonComponent target14
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 80
      stopVal [time (s)] = 82
      units = pix
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    PolygonComponent target15
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 86
      stopVal [time (s)] = 88
      units = pix
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
  Routine trial3
    RoutineSettingsComponent trial3
      stopVal [duration (s)] = 120
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    SoundComponent sound_20
      sound = C:/Users/fatma/OneDrive/Desktop/IITK BOOKS/Decision Making/DM Project/Stimulus/task_sound_stimulus/t3.ogg.opus
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_44
      allowedKeys [set every repeat] = 'left','right','space'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 120
      store = all keys
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    PolygonComponent target_12
      fillColor = 0.2706, 1.0000, -0.5451
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 2
      stopVal [time (s)] = 4
      units = pix
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    PolygonComponent target2_12
      fillColor = 0.2706, 1.0000, -0.5451
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 8
      stopVal [time (s)] = 10
      units = pix
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    PolygonComponent target3_12
      fillColor = 0.2706, 1.0000, -0.5451
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 14
      stopVal [time (s)] = 16
      units = pix
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    PolygonComponent target4_12
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 20
      stopVal [time (s)] = 22
      units = pix
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    PolygonComponent target5_12
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 26
      stopVal [time (s)] = 28
      units = pix
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    PolygonComponent target6_12
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 32
      stopVal [time (s)] = 34
      units = pix
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    PolygonComponent target7_12
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 38
      stopVal [time (s)] = 40
      units = pix
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    PolygonComponent target8_12
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 44
      stopVal [time (s)] = 46
      units = pix
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    PolygonComponent target9_12
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 50
      stopVal [time (s)] = 52
      units = pix
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    PolygonComponent target10_12
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 56
      stopVal [time (s)] = 58
      units = pix
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    PolygonComponent target11_12
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 62
      stopVal [time (s)] = 64
      units = pix
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    PolygonComponent target12_12
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 68
      stopVal [time (s)] = 70
      units = pix
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    PolygonComponent target13_12
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 74
      stopVal [time (s)] = 76
      units = pix
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    PolygonComponent target14_12
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 80
      stopVal [time (s)] = 82
      units = pix
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    PolygonComponent target15_12
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 86
      stopVal [time (s)] = 88
      units = pix
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
  Routine trial4
    RoutineSettingsComponent trial4
      stopVal [duration (s)] = 120
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    SoundComponent sound_21
      sound = C:/Users/fatma/OneDrive/Desktop/IITK BOOKS/Decision Making/DM Project/Stimulus/task_sound_stimulus/t4.ogg.opus
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_45
      allowedKeys [set every repeat] = 'left','right','space'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 120
      store = all keys
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    PolygonComponent target_13
      fillColor = 0.2706, 1.0000, -0.5451
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 2
      stopVal [time (s)] = 4
      units = pix
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    PolygonComponent target2_13
      fillColor = 0.2706, 1.0000, -0.5451
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 8
      stopVal [time (s)] = 10
      units = pix
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    PolygonComponent target3_13
      fillColor = 0.2706, 1.0000, -0.5451
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 14
      stopVal [time (s)] = 16
      units = pix
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    PolygonComponent target4_13
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 20
      stopVal [time (s)] = 22
      units = pix
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    PolygonComponent target5_13
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 26
      stopVal [time (s)] = 28
      units = pix
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    PolygonComponent target6_13
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 32
      stopVal [time (s)] = 34
      units = pix
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    PolygonComponent target7_13
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 38
      stopVal [time (s)] = 40
      units = pix
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    PolygonComponent target8_13
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 44
      stopVal [time (s)] = 46
      units = pix
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    PolygonComponent target9_13
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 50
      stopVal [time (s)] = 52
      units = pix
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    PolygonComponent target10_13
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 56
      stopVal [time (s)] = 58
      units = pix
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    PolygonComponent target11_13
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 62
      stopVal [time (s)] = 64
      units = pix
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    PolygonComponent target12_13
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 68
      stopVal [time (s)] = 70
      units = pix
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    PolygonComponent target13_13
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 74
      stopVal [time (s)] = 76
      units = pix
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    PolygonComponent target14_13
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 80
      stopVal [time (s)] = 82
      units = pix
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    PolygonComponent target15_13
      fillColor = 0.2706, 1.0000, -0.5451
      saveStartStop = False
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 86
      stopVal [time (s)] = 88
      units = pix
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
  Routine trial5
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  Routine trial6
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  Routine trial7
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  Routine trial8
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  Routine trial9
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  Routine trial10
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  Routine end
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you
        Game end!
    KeyboardComponent key_resp_23
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine start
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    TextComponent text_15
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 60
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      text:
        REMENBER:

        Also after each trial you have to report how confident you were for you responses during the trials by clicking on the white line over the slider.

        Press 'Y' when you are ready to play the game.
    KeyboardComponent key_resp_19
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 60
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Flow
  Routine instructions
  Routine trial_text
  Routine start
  Routine catch1
  Routine c1
  Routine catch1
  Routine c1
  Routine trial1
  Routine c1
  Routine trial2
  Routine c1
  Routine trial3
  Routine c1
  Routine trial4
  Routine c1
  Routine trial5
  Routine c1
  Routine catch1
  Routine c1
  Routine trial6
  Routine c1
  Routine trial7
  Routine c1
  Routine trial8
  Routine c1
  Routine trial9
  Routine c1
  Routine trial10
  Routine c1
  Routine end
